PsychoPy2experiment version="1.85.1"
Settings
  Monitor = asus_pa248
  color = $[-1,-1,0]
  Experiment info = {u'participant': u'test', u'Run': u'Run1'}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = Calib
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTriger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code
      Begin Experiment:
        TrialTriger.status=None
    CodeComponent TrialType
      Begin Experiment:
        win2 = visual.Window(
            size=(600, 600), fullscr=False, screen=0,
            allowGUI=False, allowStencil=False,
            monitor=u'test2', color=[-1,-1,-1], colorSpace='rgb',
            blendMode='avg', useFBO=True, pos=[300, 300])
        text2 = visual.TextStim(win=win2, name='text',
            text='',
            font=u'Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=u'white', colorSpace='rgb', opacity=1,
            depth=-6.0);

        text2.setAutoDraw(True)
      Begin Routine:
        if thisTrial != None:
            trial_text = ''
            for paramName in thisTrial.keys():
                exec('temp = ' + paramName)
                trial_text += u'%s = %s  \n' % (paramName, temp)
        text2.text = trial_text
        win2.flip()
    GratingComponent grating
      tex = sin
      color [set every repeat] = $Color
      stopVal [duration (s)] = 1
      units = norm
      texture resolution = 512
      startVal [time (s)] = 0
      sf = 0
      size = (2, 2)
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    CodeComponent save_to_dm11
      Begin Experiment:
        from copy_dm11 import dm11_start, dm11_trial
        filename = dm11_start(data, expInfo, logging, thisExp, _thisDir, expName)
      Begin Routine:
        dm11_trial(filename, trials)
  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Calib_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.95]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.85]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.75]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -0.65]},
      {'Color': [-1, -1, -0.6]},
      {'Color': [-1, -1, -0.55]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, -0.45]},
      {'Color': [-1, -1, -0.4]},
      {'Color': [-1, -1, -0.35]},
      {'Color': [-1, -1, -0.3]},
      {'Color': [-1, -1, -0.25]},
      {'Color': [-1, -1, -0.2]},
      {'Color': [-1, -1, -0.15]},
      {'Color': [-1, -1, -0.1]},
      {'Color': [-1, -1, -0.05]},
      {'Color': [-1, -1, 0]},
      {'Color': [-1, -1, 0.05]},
      {'Color': [-1, -1, 0.1]},
      {'Color': [-1, -1, 0.15]},
      {'Color': [-1, -1, 0.2]},
      {'Color': [-1, -1, 0.25]},
      {'Color': [-1, -1, 0.3]},
      {'Color': [-1, -1, 0.35]},
      {'Color': [-1, -1, 0.4]},
      {'Color': [-1, -1, 0.45]},
      {'Color': [-1, -1, 0.5]},
      {'Color': [-1, -1, 0.55]},
      {'Color': [-1, -1, 0.6]},
      {'Color': [-1, -1, 0.65]},
      {'Color': [-1, -1, 0.7]},
      {'Color': [-1, -1, 0.75]},
      {'Color': [-1, -1, 0.8]},
      {'Color': [-1, -1, 0.85]},
      {'Color': [-1, -1, 0.9]},
      {'Color': [-1, -1, 0.95]},
      {'Color': [-1, -1, 1]}]
    Routine trial
  LoopTerminator trials
  Routine end
