PsychoPy2experiment version="1.85.1"
Settings
  Monitor = test2
  color = $[-1,-1,0]
  Experiment info = {u'session': u'001', u'participant': u'test'}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = Calib_single_Scren
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTriger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code
      Begin Experiment:
        TrialTriger.status=None
    GratingComponent grating
      tex = sin
      color [set every repeat] = $Color
      stopVal [duration (s)] = 1
      units = norm
      texture resolution = 512
      startVal [time (s)] = 0
      sf = 0
      size = (2, 2)
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  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Calib_params_check.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, 0]},
      {'Color': [-1, -1, 0.5]},
      {'Color': [-1, -1, 1]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, 0]},
      {'Color': [-1, -1, 0.5]},
      {'Color': [-1, -1, 1]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, 0]},
      {'Color': [-1, -1, 0.5]},
      {'Color': [-1, -1, 1]}]
    Routine trial
  LoopTerminator trials
  Routine end
