PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = Dots
  Screen = 1
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Routines
  Routine trial
    DotsComponent dots
      startVal [time (s)] = 0.0
      fieldPos = (0.0, 0.0)
      speed = 0
      noiseDots = position
      dotLife = 3
      refreshDots = repeat
      fieldShape = circle
      coherence = 1.0
      nDots = 100
      stopVal [duration (s)] = 10
      fieldSize = 1.0
      signalDots = same
      dotSize = 2
      dir = 0.0
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Flow
  Routine trial
