PsychoPy2experiment version="1.85.1"
Settings
  Monitor = second
  color = $[-1,-1,0]
  Experiment info = {u'participant': u'ANM1', u'Run': u'1'}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = Grating
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTrigger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.005
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 255
    CodeComponent U3_Status
      Begin Experiment:
        # Adding status to labjack U3
        TrialTrigger.status=None
    CodeComponent tex
      Begin Experiment:
        import numpy as np
        import psychopy.filters
        grating_res = 256

        grating = psychopy.filters.makeGrating(res=grating_res, cycles=1.0)
        # initialise a 'black' texture
        tex = np.ones((grating_res, grating_res, 3)) * -1.0
        # replace the blue channel with the grating
        tex[..., -1] = grating
    GratingComponent grating
      tex = $tex
      stopVal [duration (s)] = 4
      mask = gauss
      pos [set every repeat] = $pos
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = $ori
      startVal [time (s)] = 4
      sf [set every repeat] = $sf
      size = (1, 1)
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    CodeComponent TrialType
      Begin Experiment:
        win2 = visual.Window(
            size=(300, 300), fullscr=False, screen=0,
            allowGUI=False, allowStencil=False,
            monitor=u'second', color=[1,1,1], colorSpace='rgb',
            blendMode='avg', useFBO=True)
      Begin Routine:
        if thisTrial != None:
            trial_text = ''
            for paramName in thisTrial.keys():
                exec('temp = ' + paramName)
                trial_text += u'%s = %s  ' % (paramName, temp)
        text = visual.TextStim(win=win2, name='text',
            text=trial_text,
            font=u'Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=u'white', colorSpace='rgb', opacity=1,
            depth=-6.0);
        text.setAutoDraw(True)
        win2.flip()
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RF_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'freq': 1, 'ori': 0, 'sf': 2, 'pos': [0.66, -0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [0.66, -0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [0.66, -0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [0.66, -0.66]},
      {'freq': 1, 'ori': 0, 'sf': 2, 'pos': [0.66, 0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [0.66, 0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [0.66, 0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [0.66, 0.66]},
      {'freq': 1, 'ori': 0, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 0, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 0, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 0, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 45, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 90, 'sf': 2, 'pos': [-0.66, -0.66]},
      {'freq': 1, 'ori': 135, 'sf': 2, 'pos': [-0.66, -0.66]}]
    Routine trial
  LoopTerminator trials
