PsychoPy2experiment version="1.85.1"
Settings
  Monitor = test2
  Experiment info = {u'participant': u'BMWR67', u'Run': u'Run1'}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = MouseScrennCalib_switch
  Screen = 2
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Routines
  Routine trial
    CodeComponent texture
      Begin Experiment:
        tex1 = np.ones((8,8,3)) *-1
        tex1[:4, :4, 2] = 1
        tex1[4:, 4:, 2] = 1

        tex2 = np.ones((8,8,3)) *-1
        tex2[:4, 4:, 2] = 1
        tex2[4:, :4, 2] = 1
    GratingComponent grating
      tex = $tex1
      stopVal [duration (s)] = 4
      interpolate = nearest
      units = pix
      texture resolution = 512
      startVal [time (s)] = 0
      sf = 0.125
      size = 2048
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    GratingComponent grating_2
      tex = $tex2
      stopVal [duration (s)] = 4
      interpolate = nearest
      units = pix
      texture resolution = 512
      startVal [time (s)] = 4
      sf = 0.125
      size = 2048
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  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine trial
  LoopTerminator trials
