PsychoPy2experiment version="1.85.1"
Settings
  Monitor = test2
  color = $[-1,-1,0]
  Experiment info = {u'participant': u'BMWR74', u'Run': u'Run2'}
  Units = norm
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = RF
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTrigger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 255
    CodeComponent U3Status
      Begin Experiment:
        # Add status to the labjack U3
        TrialTrigger.status=None
    CodeComponent TrialType
      Begin Routine:
        if thisTrial != None:
            trial_text = ''
            for paramName in thisTrial.keys():
                exec('temp = ' + paramName)
                trial_text += u'%s = %s  \n' % (paramName, temp)
            print(trial_text)
    CodeComponent tex
      Begin Experiment:
        import numpy as np
        import psychopy.filters
        grating_res = 512

        #grating = psychopy.filters.makeGrating(res=grating_res, cycles=1.0)
        # initialise a 'black' texture
        tex = np.ones((grating_res, grating_res, 3)) * -1.0
        # replace the blue channel with the grating
        tex[:,256:, -1] = 1
        #tex[..., -1] = grating
    GratingComponent grating
      tex = $tex
      stopVal [duration (s)] = 1
      mask = raisedCos
      pos [set every repeat] = $pos
      units = deg
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = 0
      startVal [time (s)] = 6
      sf [set every repeat] = $sf
      size [set every repeat] = $size
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    GratingComponent grating_2
      tex = $tex
      stopVal [duration (s)] = 1
      mask = raisedCos
      pos [set every repeat] = $pos
      units = deg
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = 45
      startVal [time (s)] = 7
      sf [set every repeat] = $sf
      size [set every repeat] = $size
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    GratingComponent grating_3
      tex = $tex
      stopVal [duration (s)] = 1
      mask = raisedCos
      pos [set every repeat] = $pos
      units = deg
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = 90
      startVal [time (s)] = 8
      sf [set every repeat] = $sf
      size [set every repeat] = $size
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    GratingComponent grating_4
      tex = $tex
      stopVal [duration (s)] = 1
      mask = raisedCos
      pos [set every repeat] = $pos
      units = deg
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = 135
      startVal [time (s)] = 9
      sf [set every repeat] = $sf
      size [set every repeat] = $size
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    CodeComponent save_to_dm11
      Begin Experiment:
        import pickle
        import shutil
        base = u'V:\\users\\Aaron'
        date = data.getDateStr(format='%y%m%d')
        filename = '%s\\%s_%s\\%s\\vis' % (base, date,
        expInfo['participant'], expInfo['Run'])
        directory = os.path.dirname(filename)
        if not os.path.exists(directory):
            os.makedirs(directory)
        #os.chdir(directory)
        saved=False
        logging.filename = filename+'.log'
        thisExp.filename=filename
        src = _thisDir + '\\' + expName + '.psyexp'
        des = directory + '\\' + expName + '.psyexp'
        shutil.copy(src, des)
        print('copied %s to %s' % (src, des))
      Begin Routine:
        if not saved:
            pickle.dump(trials, open(filename+'.p','wb'))
            saved=True
            print('Saved to %s' % filename+'.p')
  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RF_params.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'freq': 1, 'size': [55, 55], 'pos': [-45, 45], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [0, 45], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [45, 45], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [-45, 0], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [0, 0], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [45, 0], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [-45, -45], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [0, -45], 'sf': 0.029999999999999999},
      {'freq': 1, 'size': [55, 55], 'pos': [45, -45], 'sf': 0.029999999999999999}]
    Routine trial
  LoopTerminator trials
  Routine end
