PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [300, 300]
  Full-screen window = False
  expName = Text
  Screen = 1
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Routines
  Routine trial
    CodeComponent TrialType
      Begin Experiment:
        win2 = visual.Window(
            size=(600, 600), fullscr=False, screen=0,
            allowGUI=False, allowStencil=False,
            monitor=u'second', color=[-1,-1,-1], colorSpace='rgb',
            blendMode='avg', useFBO=True, pos=[300, 300])
        text2 = visual.TextStim(win=win2, name='text',
            text='',
            font=u'Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=u'white', colorSpace='rgb', opacity=1,
            depth=-6.0);

        text2.setAutoDraw(True)
      Begin Routine:
        if thisTrial != None:
            trial_text = ''
            for paramName in thisTrial.keys():
                exec('temp = ' + paramName)
                trial_text += u'%s = %s  \n' % (paramName, temp)
        text2.text = trial_text
        win2.flip()
    TextComponent text
      text = HelloWorld
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Grating_params.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 0},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 45},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 90},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 135},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 180},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 225},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 270},
      {'freq': 1, 'sf': 2, 'pos': [-0.66, 0.66], 'ori': 315}]
    Routine trial
  LoopTerminator trials
