PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    GratingComponent grating
      tex = sin
      color = $[-1,-1,1]
      stopVal [duration (s)] = 6
      units = degFlatPos
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()
      startVal [time (s)] = 0.0
      sf = 0.03
      size = (2, 2)
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    GratingComponent grating_2
      tex = sin
      color = $[-1,-1,1]
      stopVal [duration (s)] = 6
      units = degFlatPos
      texture resolution = 512
      ori = 45
      phase [set every frame] = trialClock.getTime()
      startVal [time (s)] = 6
      sf = 0.03
      size = (2, 2)
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Flow
  Routine trial
